orn_inh_shift = 1.000000
f_exc_noise_mit = 400.000000
strdef readout_volt_fn_base
sprint(readout_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/readout_volt_spiking_")
f_out_artificial_orn_min = 30
f_inh_noise_rsnp = 400.000000
n_rsnp_per_mc = 4
strdef volt_folder
sprint(volt_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces")
strdef mit_igaba_fn_base
sprint(mit_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/mit_igaba_")
strdef conn_list_orn_mit
sprint(conn_list_orn_mit, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_orn_mit.dat")
n_pg = 1280
w_orn_mit_mult = 4.000000
strdef pg_spike_fn_base
sprint(pg_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/pg_nspikes_")
n_pyr_rsnp_between_2mc = 10.000000
ddi_thresh = -40
t_stop = 500
strdef bcpnn_folder
sprint(bcpnn_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Bcpnn")
n_pyr_pyr_between_2mc = 45.000000
w_inh_noise_rsnp = 0.001000
n_sample_rsnp_per_mc = 1
strdef readout_spiketimes_merged_fn_base
sprint(readout_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/readout_spiketimes_merged_")
strdef pg_periph_volt_fn_base
sprint(pg_periph_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/pg_periph_volt_")
n_test_mit = 10
strdef conn_list_mit_rsnp
sprint(conn_list_mit_rsnp, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_rsnp.dat")
n_glom = 16
autorec_mit_prim_thresh = -40
f_inh_noise_pyr = 400.000000
strdef rsnp_iampa_fn_base
sprint(rsnp_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/rsnp_iampa_")
strdef time_vec_fn_base
sprint(time_vec_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/time_vector")
w_pg_mit_reciprocal_target = 0.400000
strdef readout_mean_volt_fn
sprint(readout_mean_volt_fn, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/readout_meanvolt.dat")
strdef rsnp_spiketimes_merged_fn_base
sprint(rsnp_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/rsnp_spiketimes_merged_")
w_orn_mit_sigma = 0.200000
n_test_orn = 5
strdef conn_list_mit_gran_local
sprint(conn_list_mit_gran_local, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_gran_local.dat")
w_exc_noise_pyr = 0.002000
strdef mit_nspikes_normed_patterns
sprint(mit_nspikes_normed_patterns, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_normed_patterns_np1.dat")
with_artificial_orns = 0
w_mit_gran_local_target = 0.050000
strdef rsnp_igaba_fn_base
sprint(rsnp_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/rsnp_igaba_")
n_gran = 1280
strdef rsnp_spikes_merged_fn_base
sprint(rsnp_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/rsnp_nspikes_merged_")
w_exc_noise_basket = 0.002000
strdef mit_glom_volt_fn_base
sprint(mit_glom_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/mit_glom_volt_")
strdef readout_spikes_merged_fn_base
sprint(readout_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/readout_nspikes_merged_")
strdef rsnp_spiketimes_fn_base
sprint(rsnp_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/rsnp_spiketimes_")
strdef basket_spike_fn_base
sprint(basket_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/basket_nspikes_")
strdef pyr_spikes_merged_fn_base
sprint(pyr_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/pyr_nspikes_merged_")
strdef gran_igaba_fn_base
sprint(gran_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/gran_igaba_")
n_basket_per_mc = 6
n_test_pg = 10
strdef ob_spikes_merged_fn_base
sprint(ob_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/ob_nspikes_merged_")
n_mit_gran_syn_global = 1
strdef conn_list_gran_mit_local
sprint(conn_list_gran_mit_local, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_gran_mit_local.dat")
n_readout = 1
n_test_pyr = 5
strdef basket_inmda_fn_base
sprint(basket_inmda_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/basket_inmda_")
n_test_rsnp = 1
mit_offset = 640
strdef basket_iampa_fn_base
sprint(basket_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/basket_iampa_")
strdef spiketimes_folder
sprint(spiketimes_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes")
strdef readout_params_file
sprint(readout_params_file, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/readout_params.dat")
w_inh_noise_pyr = 0.001000
ddi_pg_mit_delay = 1
w_gran_mit_global_target = 0.000000
strdef conn_list_layer23
sprint(conn_list_layer23, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_layer23.dat")
strdef conn_list_mit_pg_reciprocal
sprint(conn_list_mit_pg_reciprocal, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_pg_reciprocal.dat")
v_init_sigma = 3
w_mit_pg_serial_sigma = 0.200000
t_sim = 1200
f_exc_noise_gran = 400.000000
strdef pyr_volt_fn_base
sprint(pyr_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/pyr_volt_")
strdef activation_matrix_fn
sprint(activation_matrix_fn, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/activation_matrix.dat")
strdef oc_spikes_merged_fn_base
sprint(oc_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/oc_nspikes_merged_")
strdef mit_volt_fn_base
sprint(mit_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/mit_volt_")
strdef ob_spiketimes_merged_fn_base
sprint(ob_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/ob_spiketimes_merged_")
ddi_pg_periph_thresh = -40
n_basket_per_hc = 120
gor_exp = 3
strdef mit_prim_volt_fn_base
sprint(mit_prim_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/mit_prim_volt_")
strdef rsnp_inmda_fn_base
sprint(rsnp_inmda_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/rsnp_inmda_")
strdef readout_mean_volt_fig
sprint(readout_mean_volt_fig, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Figures/readout_meanvolt.png")
f_exc_noise_pg = 400.000000
w_inh_noise_orn = 0.003000
strdef tmp_folder
sprint(tmp_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Tmp")
w_mit_gran_global_sigma = 0.200000
mit_autoreceptor_delay = 1
time_step = 0.025000
w_gran_mit_global_sigma = 0.200000
strdef basket_params_fn_base
sprint(basket_params_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/basket_params_")
w_exc_noise_rsnp = 0.002000
w_mit_pg_reciprocal = 0.002000
with_noise = 1
strdef conn_folder
sprint(conn_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections")
strdef orn_spiketimes_fn_base
sprint(orn_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/orn_spiketimes_")
gk = 0.050000
strdef gran_periph_volt_fn_base
sprint(gran_periph_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/gran_periph_volt_")
f_inh_noise_mit = 400.000000
n_orn = 640
gor_min = 0.000030
strdef basket_spiketimes_fn_base
sprint(basket_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/basket_spiketimes_")
gna = 0.500000
strdef mit_params_fn_base
sprint(mit_params_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/mit_params_")
strdef orn_spiketimes_merged_fn_base
sprint(orn_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/orn_spiketimes_merged_")
strdef input_spikes_folder
sprint(input_spikes_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/InputSpiketrains")
strdef basket_spiketimes_merged_fn_base
sprint(basket_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/basket_spiketimes_merged_")
with_auto_receptors = 1
concentration_sweep = 1
f_inh_noise_basket = 400.000000
strdef orn_iampa_fn_base
sprint(orn_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/orn_iampa_")
n_sample_pyr_per_mc = 1
n_or = 16
w_exc_noise_pg = 0.000500
strdef test_gsyn_fn_base
sprint(test_gsyn_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/test_gsyn_")
n_orn_x = 40
n_orn_y = 16
n_pg_x_rec = 40
f_exc_noise_pyr = 400.000000
gor_max = 0.000500
tau_cadec = 1000
ddi_mit_glom_thresh = -40
strdef conn_list_mit_pg_serial
sprint(conn_list_mit_pg_serial, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_pg_serial.dat")
strdef gran_spikes_merged_fn_base
sprint(gran_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/gran_nspikes_merged_")
w_mit_gran_nmda_mult = 3
strdef info_file
sprint(info_file, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/simulation_parameters.info")
ddi_gran_periph_thresh = -40
rel_pg_mit = 10
gleak_orn = 0.000100
n_hc = 20
n_pg_x_serial = 40
pg_offset = 2048
f_out_artificial_orn_max = 40
v_init = -70.000000
w_exc_noise_mit = 0.000500
n_mit_gran_syn_local = 500
w_mit_gran_local_sigma = 0.200000
strdef activation_matrix_fig
sprint(activation_matrix_fig, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Figures/activation_matrix.png")
autorec_mit_dend_thresh = -40
strdef mit_response_normalized
sprint(mit_response_normalized, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_response_normalized_np1")
strdef mit_inmda_fn_base
sprint(mit_inmda_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/mit_inmda_")
rsnp_offset = 17728
n_pg_x = 80
readout_offset = 19328
f_inh_noise_gran = 400.000000
f_inh_noise_orn = 400.000000
strdef conn_list_pg_mit_serial
sprint(conn_list_pg_mit_serial, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_pg_mit_serial.dat")
rel_serial_reciprocal = 0.500000
n_cells = 19329
strdef orn_volt_fn_base
sprint(orn_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/orn_volt_")
ddi_gran_mit_delay = 1
strdef test_volt_fn_base
sprint(test_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/test_volt_")
strdef basket_spikes_merged_fn_base
sprint(basket_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/basket_nspikes_merged_")
strdef mit_spiketimes_merged_fn_base
sprint(mit_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/mit_spiketimes_merged_")
strdef gran_spike_fn_base
sprint(gran_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/gran_nspikes_")
strdef gran_inmda_fn_base
sprint(gran_inmda_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/gran_inmda_")
rel_reciprocal_intraglom = 0.100000
strdef readout_spiketimes_fn_base
sprint(readout_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/readout_spiketimes_")
strdef conn_list_mit_oc_base
sprint(conn_list_mit_oc_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_oc_")
orn_offset = 0
strdef readout_spike_fn_base
sprint(readout_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/readout_nspikes_")
strdef other_folder
sprint(other_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Other")
strdef conn_list_mit_gran_global
sprint(conn_list_mit_gran_global, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_gran_global.dat")
f_inh_noise_pg = 400.000000
strdef orn_spikes_merged_fn_base
sprint(orn_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/orn_nspikes_merged_")
temperature = 36
n_patterns = 1
strdef orn_igaba_fn_base
sprint(orn_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/orn_igaba_")
w_mit_pg_reciprocal_sigma = 0.200000
strdef mit_mds_input_fn
sprint(mit_mds_input_fn, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_rescaled_np1.dat")
seed_activation_matrix = 312
f_exc_noise_basket = 400.000000
strdef conn_list_gran_mit_global
sprint(conn_list_gran_mit_global, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_gran_mit_global.dat")
strdef basket_igaba_fn_base
sprint(basket_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/basket_igaba_")
strdef test_isyn_fn_base
sprint(test_isyn_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/test_isyn_")
strdef pyr_iampa_fn_base
sprint(pyr_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/pyr_iampa_")
n_basket = 2400
strdef isyn_folder
sprint(isyn_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents")
strdef gran_volt_fn_base
sprint(gran_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/gran_volt_")
strdef pg_iampa_fn_base
sprint(pg_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/pg_iampa_")
w_mit_gran_global_target = 0.000000
w_mit_nmda_autoreceptors = 0.004000
w_exc_noise_orn = 0.000500
strdef rsnp_spike_fn_base
sprint(rsnp_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/rsnp_nspikes_")
t_sigma_artificial_orn = 50
rel_ff_wta_inhibition = 0.700000
n_pyr = 12000
strdef conn_list_pg_mit_reciprocal
sprint(conn_list_pg_mit_reciprocal, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_pg_mit_reciprocal.dat")
n_test_gran = 10
t_start = 0
n_test_basket = 1
strdef pyr_spike_fn_base
sprint(pyr_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/pyr_nspikes_")
n_mc = 20
n_mit_y = 16
n_mit_x = 8
thresh = 0
strdef folder_name
sprint(folder_name, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned")
strdef pg_volt_fn_base
sprint(pg_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/pg_volt_")
w_pg_mit_reciprocal_sigma = 0.200000
w_mit_ampa_autoreceptors = 0.002000
strdef conn_list_orn_pg
sprint(conn_list_orn_pg, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_orn_pg.dat")
strdef oc_spiketimes_merged_fn_base
sprint(oc_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/oc_spiketimes_merged_")
n_sample_basket_per_hc = 1
rel_orn_mit = 5
strdef orn_spike_fn_base
sprint(orn_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/orn_nspikes_")
strdef mit_iampa_fn_base
sprint(mit_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/mit_iampa_")
strdef pg_spikes_merged_fn_base
sprint(pg_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/pg_nspikes_merged_")
strdef rsnp_volt_fn_base
sprint(rsnp_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/rsnp_volt_")
n_tgt_basket_per_mc = 8
strdef pyr_ca_fn_base
sprint(pyr_ca_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/pyr_calcium_")
Cluster = 0
n_gran_x = 80
n_gran_y = 16
w_orn_pg_sigma = 0.200000
ddi_mit_dend_thresh = -40
ddi_mit_gran_delay = 1
strdef hoc_file
sprint(hoc_file, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/simulation_params.hoc")
strdef mit_spiketimes_fn_base
sprint(mit_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/mit_spiketimes_")
n_rsnp = 1600
strdef gran_deep_volt_fn_base
sprint(gran_deep_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/gran_deep_volt_")
strdef mit_dend_volt_fn_base
sprint(mit_dend_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/mit_dend_volt_")
strdef orn_params_fn_base
sprint(orn_params_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/orn_params_")
strdef pg_igaba_fn_base
sprint(pg_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/pg_igaba_")
pyr_offset = 3328
strdef params_folder
sprint(params_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters")
strdef pg_spiketimes_fn_base
sprint(pg_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/pg_spiketimes_")
strdef netcon_folder
sprint(netcon_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Netcons")
strdef conn_list_mit_pyr
sprint(conn_list_mit_pyr, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_pyr.dat")
n_tgt_pyr_per_mc = 15.000000
seed = 98765
global_offset = 0
w_mit_pg_serial = 0.005000
strdef figure_folder
sprint(figure_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Figures")
strdef pyr_spiketimes_fn_base
sprint(pyr_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/pyr_spiketimes_")
strdef gran_spiketimes_fn_base
sprint(gran_spiketimes_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/gran_spiketimes_")
w_pg_mit_serial_sigma = 0.200000
w_inh_noise_gran = 0.003000
basket_offset = 15328
w_inh_noise_mit = 0.003000
prop_pg_mit_serial_rec = 3
n_pyr_per_mc = 30
w_gran_mit_local_sigma = 0.200000
w_gran_mit_local_target = 5.000000
strdef mit_nspikes_normed_cells_then_patterns
sprint(mit_nspikes_normed_cells_then_patterns, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_normed_cells_then_patterns_np1.dat")
n_mit = 128
strdef mit_nspikes_normed_glom_cells
sprint(mit_nspikes_normed_glom_cells, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_normed_glom_cells_np1.dat")
n_proc = 8
strdef mit_nspikes_normed_patterns_then_cells
sprint(mit_nspikes_normed_patterns_then_cells, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_normed_patterns_then_cells_np1.dat")
strdef orn_iodor_fn_base
sprint(orn_iodor_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/orn_iodor_")
tau_odorinput_sigmoid = 20
strdef rsnp_params_fn_base
sprint(rsnp_params_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/rsnp_params_")
gcal = 0.000600
n_gor = 8
strdef basket_volt_fn_base
sprint(basket_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/basket_volt_")
w_orn_pg_mult = 4.000000
strdef pyr_igaba_fn_base
sprint(pyr_igaba_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/pyr_igaba_")
strdef mit_spikes_merged_fn_base
sprint(mit_spikes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_merged_")
w_orn_mit_target = 0.100000
strdef gran_spiketimes_merged_fn_base
sprint(gran_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/gran_spiketimes_merged_")
strdef mit_response
sprint(mit_response, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_response_not_normalized_np1")
w_orn_pg_target = 0.025000
gran_offset = 768
w_nmda_mult = 2
netstim_seed = 0
strdef pyr_spiketimes_merged_fn_base
sprint(pyr_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/pyr_spiketimes_merged_")
strdef pg_spiketimes_merged_fn_base
sprint(pg_spiketimes_merged_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Spiketimes/pg_spiketimes_merged_")
rel_gran_mit = 10
strdef params_fn_json
sprint(params_fn_json, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/simulation_parameters.json")
w_inh_noise_pg = 0.003000
strdef gran_iampa_fn_base
sprint(gran_iampa_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/gran_iampa_")
strdef mit_nspikes_normed_cells
sprint(mit_nspikes_normed_cells, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_normed_cells_np1.dat")
strdef pyr_params_file
sprint(pyr_params_file, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Parameters/pyr_params.dat")
strdef pyr_inmda_fn_base
sprint(pyr_inmda_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/pyr_inmda_")
time_step_rec = 0.500000
strdef mit_spike_fn_base
sprint(mit_spike_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_")
strdef pg_inmda_fn_base
sprint(pg_inmda_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/SynapticCurrents/pg_inmda_")
n_pg_y = 16
n_cell_per_glom = 208
strdef conn_list_mit_oc
sprint(conn_list_mit_oc, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/Connections/conn_list_mit_oc.dat")
w_exc_noise_gran = 0.000500
w_inh_noise_basket = 0.001000
w_pg_mit_serial_target = 5.000000
ddi_mit_pg_delay = 1
f_exc_noise_orn = 400.000000
strdef nspikes_folder
sprint(nspikes_folder, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes")
strdef mit_nspikes_rescaled
sprint(mit_nspikes_rescaled, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/NumberOfSpikes/mit_nspikes_rescaled_np1.dat")
n_tgt_rsnp_per_mc = 3.000000
strdef pg_deep_volt_fn_base
sprint(pg_deep_volt_fn_base, "/home/bernhard/workspace/olfactory_system/OlfactorySystem/neuron_files/HandTuned/VoltageTraces/pg_deep_volt_")
f_exc_noise_rsnp = 400.000000
gkcag = 0.010000
n_cells_ob = 2688
n_cells_oc = 16001
